PsychoPy2experiment version="2026.1.3"
<!--
  Eye Tribe full-workflow demo for psychopy-eyetracker-eyetribe (Phase 12 / B5).

  Flow: welcome → calibration (9-pt) → freeview with live gaze dot →
        validation (9 targets from validation_conditions.xlsx) → gaze overlay.

  Prerequisites:
    - psychopy-eyetracker-eyetribe installed (pip install <wheel>).
    - Eye Tribe Server running at 127.0.0.1:6555; ET1000 connected.
    - Open in PsychoPy 2026.1.3 Builder.  In Experiment Settings → Eyetracking
      confirm Host=127.0.0.1, Port=6555, Gaze source=raw, Targets=9.
-->
<!-- Eye Tribe device — configure host/port in Experiment Settings > Eyetracking -->
<!-- ═══════════════════════════ welcome ═══════════════════════════ -->
<!-- ════════════════════ calibration (built-in) ═════════════════════ -->
<!-- ═══════════════════════════ freeview ══════════════════════════ -->
<!-- ═══════════════════════ freeview_stop ════════════════════════ -->
<!-- ══════════════════════ validation_intro ══════════════════════ -->
<!-- ════════════════════════════ iti ═════════════════════════════ -->
<!-- ════════════════════════ validation_trial ════════════════════ -->
<!-- Start eye-tracker recording at trial onset -->
<!-- Yellow target dot; position and label come from validation_conditions.xlsx -->
<!-- Live gaze cursor (cross) -->
<!-- Collect gaze samples during the 2 s recording window -->
<!-- ══════════════════════ validation_stop ═══════════════════════ -->
<!-- ═══════════════════════════ heatmap ══════════════════════════ -->
<!-- Build overlay stims once at routine start; draw each frame -->
Settings
  End Message = Thank you.
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = eyetribe_demo
  eyetracker = eyetracker.hw.eyetribe.EyeTracker
  etHost = 127.0.0.1
  etPort = 6555
  etGazeSource = raw
  etCalibTargetCount = 9
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine welcome
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    TextboxComponent welcome_text
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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      text:
        Eye Tribe Demo

        This experiment demonstrates the Eye Tribe eye tracker plugin for PsychoPy.

        Steps:
          1. 9-point calibration
          2. Free-viewing with live gaze dot
          3. 9-target validation
          4. Gaze-overlay heatmap

        Press SPACE to begin.
    KeyboardComponent key_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  EyetrackerCalibrationRoutine calibration
    borderColor = white
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    fillColor = green
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = red
    innerRadius = 0.005
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.015
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
    useCustom = False
  Routine freeview
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    EyetrackerRecordComponent et_freeview_start
      actionType = Start Only
      startVal [time (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = False
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    TextComponent freeview_instr
      letterHeight = 0.04
      pos = (0, 0.43)
      startVal [time (s)] = 0.0
      text = Look around freely — press SPACE when done.
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    PolygonComponent gaze_dot_free
      fillColor = cyan
      lineColor = None
      pos [set every frame] = eyetracker.getPos()
      shape = cross
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_freeview
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine freeview_stop
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    TextComponent freeview_stop_fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    EyetrackerRecordComponent et_freeview_stop
      actionType = Stop Only
      stopVal [duration (s)] = 0.5
      stopWithRoutine = False
      syncScreenRefresh = False
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  Routine validation_intro
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    TextboxComponent val_intro_text
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
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      text:
        Validation — 9 targets

        Look at each yellow dot as it appears.
        Keep your head still and maintain a comfortable distance.

        Press SPACE to start.
    KeyboardComponent key_val_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine iti
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    TextComponent fixation_cross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine validation_trial
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    EyetrackerRecordComponent et_trial_start
      actionType = Start Only
      startVal [time (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = False
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    PolygonComponent target_dot
      fillColor = yellow
      lineWidth = 2
      pos [set every repeat] = (target_x, target_y)
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    PolygonComponent gaze_cursor_val
      fillColor = white
      lineColor = None
      pos [set every frame] = eyetracker.getPos()
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent collect_gaze
      Code Type = Py
      Before Experiment:
        _et_gaze_log = []
      Begin Routine:
        _trial_gazes = []
      Each Frame:
        _pos = eyetracker.getPos()
        if _pos is not None:
            _trial_gazes.append(tuple(_pos))
      End Routine:
        _et_gaze_log.append({'target': (target_x, target_y), 'gazes': list(_trial_gazes), 'label': target_label})
  Routine validation_stop
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    TextComponent val_stop_fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    EyetrackerRecordComponent et_trial_stop
      actionType = Stop Only
      stopVal [duration (s)] = 0.5
      stopWithRoutine = False
      syncScreenRefresh = False
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  Routine heatmap
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    CodeComponent heatmap_code
      Code Type = Py
      Begin Routine:
        _heatmap_stims = []
        for _entry in _et_gaze_log:
            _tx, _ty = _entry['target']
            _tgt = visual.Circle(win, radius=0.04, pos=(_tx, _ty), lineColor='yellow', lineWidth=2, fillColor=None, units='height')
            _heatmap_stims.append(_tgt)
            if _entry['gazes']:
                _mx = sum(g[0] for g in _entry['gazes']) / len(_entry['gazes'])
                _my = sum(g[1] for g in _entry['gazes']) / len(_entry['gazes'])
                _dot = visual.Circle(win, radius=0.015, pos=(_mx, _my), fillColor='red', lineColor=None, units='height')
                _heatmap_stims.append(_dot)
                for _gx, _gy in _entry['gazes'][::2]:
                    _s = visual.Circle(win, radius=0.005, pos=(_gx, _gy), fillColor='cyan', lineColor=None, opacity=0.4, units='height')
                    _heatmap_stims.append(_s)
      Each Frame:
        for _s in _heatmap_stims:
            _s.draw()
    TextComponent heatmap_title
      letterHeight = 0.04
      pos = (0, 0.43)
      startVal [time (s)] = 0.0
      text = Gaze overlay  |  yellow = target  red = mean gaze  cyan = samples  |  SPACE to exit
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    KeyboardComponent key_heatmap
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  EyetrackerCalibrationRoutine calibration
  Routine freeview
  Routine freeview_stop
  Routine validation_intro
  LoopInitiator validation_loop loopType="TrialHandler"
    conditionsFile = validation_conditions.xlsx
    loopType = sequential
    nReps = 1
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    Routine iti
    Routine validation_trial
    Routine validation_stop
  LoopTerminator validation_loop
  Routine heatmap
